PsychoPy2experiment version="2020.2.10"
Settings
  Data filename = u'data/%s/%s_%s_%s_%s' % (expInfo['participant'], expInfo['participant'], expInfo['session'], expName, expInfo['date'])
  Experiment info = {'participant': '', 'session': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 2
  Show mouse = True
  Units = height
  Window size (pixels) = [4480, 1440]
  color = $[-1,-1,-1]
  expName = tasks_psychopy
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Routines
  Routine start
    CodeComponent code_start
      Code Type = Auto->JS
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      Before Experiment:
        import participant_config
        import  trigger_notification
        import stimuli_generation
        import reading_passages
        import  device_driver
        import  log_utility
      Begin Experiment:
        # decide based on participant, session
        task_type = participant_config.get_task_type(expInfo['participant'], expInfo['session'])
        task_location = participant_config.get_task_location(expInfo['participant'], expInfo['session'])
        task_mobility = participant_config.get_task_mobility(expInfo['participant'], expInfo['session'])
        task_duration = participant_config.get_task_duration(expInfo['participant'], expInfo['session'])
        notification_type = participant_config.get_notification_type(expInfo['participant'], expInfo['session'])
        is_training_session = int(expInfo['session']) < 0

        # get the notification list (to trigger  later)
        notification_list = trigger_notification.get_notification_list(expInfo['participant'], expInfo['session'])

        # log info
        log_utility.log_participant_info(expInfo['participant'], expInfo['session'], task_type, task_location, task_mobility,notification_type)

        # clear display
        device_driver.clear_reading_passage()
        device_driver.clear_notification_data()
      Begin Routine:
        # start triggering notifications
        trigger_notification.trigger_notification_randomly_threaded(expInfo['participant'], expInfo['session'], notification_list, globalClock)
      End Routine:
        log_utility.log_timing_threaded(expInfo['participant'], expInfo['session'], -1, globalClock.getTime(), win.getFutureFlipTime(clock=None))
    TextComponent txt_start
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Starting ...
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  Routine end
    TextComponent txt_end
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = Stopping ...
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  Routine task_vigilance
    CodeComponent code_v
      Code Type = Auto->JS
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      Begin Experiment:
        trials_vigilance = 0

        if task_type == 'vigilance':
           # enable trials
           trials_vigilance = 1

           # generate new stimuli
           stimuli_generation.generate_vigilance_stimuli_csv('stimuli/vigilance_stimuli.csv', task_duration)


        # keep track of timing
        timing_info = ''

        # stimuli mapping
        image_mapping = {'1': 'img/76x76.png',  '2':'img/100x100.png',  '3':'img/100x76.png', '4':'img/76x100.png'}

        if task_location == 'desktop':
            # do nothing
            pass

        if task_location == 'glass':
            # reset the stimuli mapping
           pass
      Begin Routine:
        timing_info = timing_info + '{},{},{}\n'.format(trials_v.thisRepN, globalClock.getTime(),  win.getFutureFlipTime(clock=None))
      End Experiment:
        # log timing
        log_utility.log_all_timing(expInfo['participant'], expInfo['session'], timing_info)
    MouseComponent mouse_v
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .625
      syncScreenRefresh = True
      timeRelativeTo = experiment
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    ImageComponent im_v
      image [set every repeat] = $image_mapping[str($image_id)]
      size = (3, 3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.625
      units = cm
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    ImageComponent im_line
      image = img/white_line.png
      pos = (0, 0.35)
      size = (2, 0.005)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.625
      units = norm
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  Routine task_reading
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        reading_text = ''

        trials_reading = 0

        if task_type == 'reading':
            # enable trials
            trials_reading = 1
      Begin Routine:
        # generate new text
        passage  = reading_passages.get_reading_passages(task_duration, is_training_session, expInfo['participant'])

        # log info
        log_utility.log_passage_info(expInfo['participant'], expInfo['session'], passage)

        # track time
        reading_start_time = globalClock.getTime()

        if task_location == 'desktop':
            # set text
            reading_text =  passage["text"]

        if task_location == 'glass':
            #clear the box
            text_r.fillColor = None
            # send text to glass
            device_driver.send_reading_passage(passage["text"])
            # enable scolling
            device_driver.enable_scrolling_listening()
      End Routine:
        if task_location == 'glass':
            # clear text
            device_driver.clear_reading_passage()
            # disable scolling
            device_driver.disable_scrolling_listening()

        reading_text = ""

        # track time
        reading_end_time = globalClock.getTime()
        print('Reading time', reading_end_time - reading_start_time)
    TextboxComponent text_r
      bold = False
      borderWidth = 1
      editable = False
      fillColor = black
      letterHeight = 0.024
      padding = 0.03
      size = [1.25,None]
      startVal [time (s)] = 0.0
      text [set every repeat] = $reading_text
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
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  Routine task_recognition
    CodeComponent check_finish
      Code Type = Auto->JS
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      Begin Routine:
        # only allow to continue after fillign all questions
        continueButton = visual.ButtonStim(win, labelText= "Continue", pos=(.35, -.45))

        # cancel notification triggering
        trigger_notification.cancel_notification_trigger()
      Each Frame:
        continueButton.draw()

        if form_recog.complete:
            continueButton.buttonEnabled = True

        if continueButton.buttonSelected:
            continueRoutine = False
    TextboxComponent form_instr
      anchor = top-center
      bold = False
      editable = False
      letterHeight = 0.025
      padding = None
      pos = (0, 0.5)
      startVal [time (s)] = 0.0
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      text:
        Have you seen the following notifications?
        Check the whole sentence as some sentence may have altered the original notification.
    FormComponent form_recog
      Data Format = rows
      Item Padding = 0.05
      Items = stimuli/recognition_stimuli.csv
      Randomize = True
      Style = ['dark']
      Text Height = 0.03
      size = (1, 0.75)
      startVal [time (s)] = 0.0
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Flow
  Routine start
  LoopInitiator trials_v loopType="TrialHandler"
    conditionsFile = stimuli/vigilance_stimuli.csv
    loopType = sequential
    nReps = $trials_vigilance
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    conditions:
      [OrderedDict([('stimuli_type', 'i9'), ('stimuli_id', 1), ('image_id', 1)]),
      OrderedDict([('stimuli_type', 'i9'), ('stimuli_id', 2), ('image_id', 2)]),
      OrderedDict([('stimuli_type', 'i9'), ('stimuli_id', 3), ('image_id', 1)]),
      OrderedDict([('stimuli_type', 'i9'), ('stimuli_id', 4), ('image_id', 2)]),
      OrderedDict([('stimuli_type', 'i3'), ('stimuli_id', 5), ('image_id', 1)]),
      OrderedDict([('stimuli_type', 'i3'), ('stimuli_id', 6), ('image_id', 2)]),
      OrderedDict([('stimuli_type', 'i3'), ('stimuli_id', 7), ('image_id', 4)]),
      OrderedDict([('stimuli_type', 'i3'), ('stimuli_id', 8), ('image_id', 1)]),
      OrderedDict([('stimuli_type', 'i3'), ('stimuli_id', 9), ('image_id', 2)]),
      OrderedDict([('stimuli_type', 'i5'), ('stimuli_id', 10), ('image_id', 1)]),
      OrderedDict([('stimuli_type', 'i5'), ('stimuli_id', 11), ('image_id', 2)]),
      OrderedDict([('stimuli_type', 'i5'), ('stimuli_id', 12), ('image_id', 1)]),
      OrderedDict([('stimuli_type', 'i5'), ('stimuli_id', 13), ('image_id', 4)]),
      OrderedDict([('stimuli_type', 'i5'), ('stimuli_id', 14), ('image_id', 1)]),
      OrderedDict([('stimuli_type', 'i5'), ('stimuli_id', 15), ('image_id', 2)]),
      OrderedDict([('stimuli_type', 'i9'), ('stimuli_id', 16), ('image_id', 1)]),
      OrderedDict([('stimuli_type', 'i9'), ('stimuli_id', 17), ('image_id', 2)]),
      OrderedDict([('stimuli_type', 'i9'), ('stimuli_id', 18), ('image_id', 1)]),
      OrderedDict([('stimuli_type', 'i9'), ('stimuli_id', 19), ('image_id', 2)]),
      OrderedDict([('stimuli_type', 'i3'), ('stimuli_id', 20), ('image_id', 1)])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
    Routine task_vigilance
  LoopTerminator trials_v
  LoopInitiator trials_r loopType="TrialHandler"
    loopType = sequential
    nReps = $trials_reading
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    Routine task_reading
  LoopTerminator trials_r
  Routine task_recognition
  Routine end
